# TOPAS-nBio example - Ellipsoid cell
#
# The default semi-axis lengths of the cell are: 
# xSemiAxis = 20 um, ySemiAxis = 10 um and zSemiAxis = 15 um, 
# if not defined in the parameter file. 
#
# To include a nucleus at the center of the cell, specify the nucleus radius. 
# To include mitochondria, randomly positioned in the cytoplasm, 
# specify the number of mitochondria.
# 
#
# Since mitochondria are arranged randomly, this check should be switched off, 
# overlap checking is still done. 
b:Ge/QuitIfOverlapDetected="false"

# Note: Having a very large number of mitochondria will slow down the code. 
# Ensure the volume is big enough to accommodate all mitochondria defined, 
# otherwise the code may get stuck in a loop. 


#Define the world volume
d:Ge/World/HLX=50. um
d:Ge/World/HLY=50. um
d:Ge/World/HLZ=50. um

#Cell 
s:Ge/MyCell/Type="TsEllipsoidCell"
s:Ge/MyCell/Material="G4_WATER"
s:Ge/MyCell/Parent="World"
d:Ge/MyCell/xSemiAxis=20 um
d:Ge/MyCell/ySemiAxis=20 um
d:Ge/MyCell/zSemiAxis=15 um
s:Ge/MyCell/Color="white"

#Nucleus
d:Ge/MyCell/Nucleus/NucleusRadius=8. um
s:Ge/MyCell/Nucleus/Material="G4_WATER"
s:Ge/MyCell/Nucleus/Color="red"
s:Ge/MyCell/Nucleus/DrawingStyle="solid"
d:Ge/MyCell/Nucleus/translateNucleusZ = 5. um
d:Ge/MyCell/Nucleus/translateNucleusX = 1. um
d:Ge/MyCell/Nucleus/translateNucleusY = 0.5 um

#Mitochondria
i:Ge/MyCell/Mitochondria/NumberOfMitochondria=30
d:Ge/MyCell/Mitochondria/a=0.5 um
d:Ge/MyCell/Mitochondria/b=0.3 um
d:Ge/MyCell/Mitochondria/c=0.9 um
s:Ge/MyCell/Mitochondria/Material="G4_WATER"
s:Ge/MyCell/Mitochondria/Color="grass"
s:Ge/MyCell/Mitochondria/DrawingStyle="solid"

Ph/Default/Modules = 1 "g4em-dna"

# Set a source
s:So/Example/Type                     = "Beam"
s:So/Example/Component                = "BeamPosition"
s:So/Example/BeamParticle             = "proton"
d:So/Example/BeamEnergy               = 5 MeV
u:So/Example/BeamEnergySpread         = 0.757504
s:So/Example/BeamPositionDistribution = "None"
s:So/Example/BeamAngularDistribution  = "Gaussian"
d:So/Example/BeamAngularCutoffX       = 90. deg
d:So/Example/BeamAngularCutoffY       = 90. deg
d:So/Example/BeamAngularSpreadX       = 0.0032 rad
d:So/Example/BeamAngularSpreadY       = 0.0032 rad
i:So/Example/NumberOfHistoriesInRun   = 2

#Score in the Cell
s:Sc/CellScorer/Quantity = "DoseToMedium"
s:Sc/CellScorer/Component = "MyCell"
b:Sc/CellScorer/OutputToConsole = "TRUE"
b:Sc/CellScorer/PropagateToChildren = "true"
s:Sc/CellScorer/IfOutputFileAlreadyExists = "overwrite"

s:Gr/ViewA/Type = "OpenGL"
i:Gr/ViewA/WindowSizeX = 1000
i:Gr/ViewA/WindowSizeY = 800
u:Gr/ViewA/Zoom = 2.

Ts/PauseBeforeQuit = "True"
b:Ts/ShowCPUTime = "True"
