# TOPAS-nBio example - Fibroblast Cell
# A fibroblast cell geometry
# Specifying parameters for a nucleus and/or mitochondria, include the organelles.
#
# Since mitochondria are arranged randomly, this check should be switched off, overlap checking is still done 
# and when an overlap is detected the overlapping components are rearranged. 
b:Ge/QuitIfOverlapDetected="false"

d:Ge/World/HLX=50. um
d:Ge/World/HLY=50. um
d:Ge/World/HLZ=50. um

s:Ge/MyCell/Type="TsFibroblastCell1"
s:Ge/MyCell/Color="white"
s:Ge/MyCell/Parent="World"
s:Ge/MyCell/Material="G4_WATER"

#Nucleus
d:Ge/MyCell/Nucleus/NucleusRadius=6. um
s:Ge/MyCell/Nucleus/Material="G4_WATER"
s:Ge/MyCell/Nucleus/Color="red"
s:Ge/MyCell/Nucleus/DrawingStyle="solid"

#Mitochondria
i:Ge/MyCell/Mitochondria/NumberOfMitochondria=50
d:Ge/MyCell/Mitochondria/a=0.5 um
d:Ge/MyCell/Mitochondria/b=0.3 um
d:Ge/MyCell/Mitochondria/c=0.9 um
s:Ge/MyCell/Mitochondria/Material="G4_WATER"
s:Ge/MyCell/Mitochondria/Color="green"
s:Ge/MyCell/Mitochondria/DrawingStyle="solid"

Ph/Default/Modules = 1 "g4em-dna"

# Set a source
s:So/Example/Type                     = "Beam"
s:So/Example/Component                = "BeamPosition"
s:So/Example/BeamParticle             = "proton"
d:So/Example/BeamEnergy               = 5 MeV
u:So/Example/BeamEnergySpread         = 0.757504
s:So/Example/BeamPositionDistribution = "None"
s:So/Example/BeamAngularDistribution  = "Gaussian"
d:So/Example/BeamAngularCutoffX       = 90. deg
d:So/Example/BeamAngularCutoffY       = 90. deg
d:So/Example/BeamAngularSpreadX       = 0.0032 rad
d:So/Example/BeamAngularSpreadY       = 0.0032 rad
i:So/Example/NumberOfHistoriesInRun   = 2

#Score in the Cell
s:Sc/CellScorer/Quantity = "DoseToMedium"
s:Sc/CellScorer/Component = "MyCell"
b:Sc/CellScorer/OutputToConsole = "TRUE"
b:Sc/CellScorer/PropagateToChildren = "true"
s:Sc/CellScorer/IfOutputFileAlreadyExists = "overwrite"

#Score energy deposited in Cell components
s:Sc/OrganelleScorer/Quantity = "TsNtupleForCell"
s:Sc/OrganelleScorer/Component = "MyCell"
s:Sc/OrganelleScorer/IfOutputFileAlreadyExists = "Overwrite"  
s:Sc/OrganelleScorer/OutputType = "ASCII" 
s:Sc/OrganelleScorer/OutputFile = "EdepToOrganelles"
b:Sc/OrganelleScorer/PropagateToChildren = "True"

s:Gr/ViewA/Type = "OpenGL"
i:Gr/ViewA/WindowSizeX = 1000
i:Gr/ViewA/WindowSizeY = 800
d:Gr/ViewA/PerspectiveAngle = 0 deg
d:Gr/ViewA/Theta = 0 deg
d:Gr/ViewA/Phi = 0 deg
u:Gr/ViewA/Zoom = 2.

Ts/PauseBeforeQuit = "True"
b:Ts/ShowCPUTime = "True"

