# Demonstrates scoring G-values with Chemistry process 
# An electron point source of 750 keV is shooted from the
# back side of  a slab of 2.5 um thickness.
# The gvalue scorer is attached to the Target volume.
# The user must to define the TimeToRecord, this is the 
# time after the physics/chemistry process occurred. 
#
# Restrictions: 
# *  Only one GValue scorer is allowed 
# *  The time limit is up to 1 microsecond. 
# *  The media must be G4_WATER 
# *  NO PARALLEL volumes are supported.
# *  Due to the name of the molecule is scored, BINARY output
#    is not supported, only ROOT and ASCII 
# 

i:Ts/NumberOfThreads = 4
sv:Ph/Default/Modules = 2 "g4em-dna" "g4em-dna-chemistry"

d:Ge/World/HLX= 5. um
d:Ge/World/HLY= 5. um
d:Ge/World/HLZ= 5. um
s:Ge/World/Material ="G4_WATER"

s:Ge/Target/Parent = "World"
s:Ge/Target/Type = "TsBox"
s:Ge/Target/Material = "G4_WATER"
d:Ge/Target/HLX = Ge/World/HLX um
d:Ge/Target/HLY = Ge/World/HLY um
d:Ge/Target/HLZ = 1.25 um 

d:Ge/BeamPosition/TransZ = -1.0 * Ge/Target/HLZ um 
d:Ge/BeamPosition/RotX = 0 deg

d:So/Demo/BeamEnergy = 750 keV 
u:So/Demo/BeamEnergySpread = 0
s:So/Demo/BeamParticle = "e-"
s:So/Demo/BeamPositionDistribution = "None"

s:Sc/GValueInTarget/Quantity = "gvalue" 
s:Sc/GValueInTarget/Component = "Target"
s:Sc/GValueInTarget/IfOutputFileAlreadyExists = "Overwrite"
b:Sc/GValueInTarget/OutputToConsole = "True"
# Record time, do not confuse with Time features.
i:Sc/GValueInTarget/TimeBins   = 20
d:Sc/GValueInTarget/TimeBinMin = 1.0 ps
d:Sc/GValueInTarget/TimeBinMax = 999999.0 ps 
b:Sc/GValueInTarget/TimeBinLog = "true"
s:Sc/GValueInTarget/OutputType = "ascii" # or root
s:Sc/GValueInTarget/OutputFile = "Gvalue_e_750keV"

i:So/Demo/NumberOfHistoriesInRun = 10
i:Ts/ShowHistoryCountAtInterval = 1 
b:Ts/ShowCPUTime = "True"
i:Ts/Seed = 12345
