# TOPAS-nBio example : Circular DNA Plasmid
# DNA plasmid is placed in a box and irradiated by alphas.
# Energy deposited is scored in plasmid sugar volumes, then,
# DBSCAN is used to classify DSB from SSB. SSB are produced if
# the energy deposition event exceeds a probability value defined
# by a ramp distribution from 5 eV - 37.5 eV. A DSB is defined if 
# at least two SSB occurred within 3.4 nm distance.

b:Ge/QuitIfOverlapDetected="true"

#World volume
d:Ge/World/HLX = 150 nm
d:Ge/World/HLY = 150 nm
d:Ge/World/HLZ = 150 nm
s:Ge/World/Material="G4_WATER"

# Auxiliar material for volumes in strand 1
s:Ma/G4_WATER_MODIFIED_1/CloneFromMaterial = "G4_WATER"
d:Ma/G4_WATER_MODIFIED_1/CloneWithDensity  = 1.0 g/cm3

# Auxiliar material for volumes in strand 2
s:Ma/G4_WATER_MODIFIED_2/CloneFromMaterial = "G4_WATER_MODIFIED_1"
d:Ma/G4_WATER_MODIFIED_2/CloneWithDensity  = 1.0 g/cm3

#Circular DNA plasmid
s:Ge/CircularPlasmid/Type               = "TsCircularPlasmid"
s:Ge/CircularPlasmid/Parent             = "World"
s:Ge/CircularPlasmid/Material           = "G4_WATER"
b:Ge/CircularPlasmid/Invisible          = "True"
i:Ge/CircularPlasmid/NumberOfBasePairs  = 2000
s:Ge/CircularPlasmid/BasePair/Material      ="G4_WATER"
s:Ge/CircularPlasmid/BasePair/Color         ="yellow"
s:Ge/CircularPlasmid/BasePair/DrawingStyle  ="solid"
b:Ge/CircularPlasmid/BasePair/Invisible     ="false"
s:Ge/CircularPlasmid/Sugar1/Material    ="G4_WATER_MODIFIED_1"
s:Ge/CircularPlasmid/Sugar1/Color       ="red"
s:Ge/CircularPlasmid/Sugar1/DrawingStyle="solid"
b:Ge/CircularPlasmid/Sugar1/Invisible   ="false"
s:Ge/CircularPlasmid/Sugar2/Material    ="G4_WATER_MODIFIED_2"
s:Ge/CircularPlasmid/Sugar2/Color       ="blue"
s:Ge/CircularPlasmid/Sugar2/DrawingStyle="solid"
b:Ge/CircularPlasmid/Sugar2/Invisible   ="false"
d:Ge/CircularPlasmid/RotX               = 90 deg

# Score simple SSB and DSB in plasmid.
# A DSB is defined when two SSB occurred at 
# distances smaller than a user defined number of base pairs.
s:Sc/StrandBreak/Quantity                             = "SimpleSSBandDSBWithDBSCAN"
s:Sc/StrandBreak/Component                            = "CircularPlasmid"
s:Sc/StrandBreak/OutputType                           = "ASCII"
s:Sc/StrandBreak/OutputFile                           = "StrandBreaks"
b:Sc/StrandBreak/OutputToConsole                      = "True"
s:Sc/StrandBreak/IfOutputFileAlreadyExists            = "Overwrite"
# Parameters to define a strand break and a double strand break
d:Sc/StrandBreak/MaximumDistanceForDefiningDSB        = 3.4 nm
i:Sc/StrandBreak/MinimumNumberOfSSBtoFormDSB          = 2
d:Sc/StrandBreak/EnergyThresholdForHavingSSB          = 5.0 eV
d:Sc/StrandBreak/EnergyLimitForHavingSSB              = 37.5 eV
b:Sc/StrandBreak/SampleEnergyFromRampDistribution     = "True"
u:Sc/StrandBreak/ScoreHitsWithProbability             = 0.16  # 16%
# The sensitive detector is inherit to the children geometries (sugar1, sugar2)
b:Sc/StrandBreak/PropagateToChildren = "True"
# For this example, the sugars and base are single volumes (no replicas)
# placed within a box. The box is repeated a number = NumberOfBasePairs
i:Sc/StrandBreak/BasePairPositionAtGeometricHierarchy = 1   # the sugars and base are in position 0.
# To let the scorer differentiate between strand 1 (sugar1) and strand 2 (sugar2)
s:Sc/StrandBreak/Strand1MaterialName                  = "G4_WATER_MODIFIED_1"
s:Sc/StrandBreak/Strand2MaterialName                  = "G4_WATER_MODIFIED_2"
# Only hits in sugar's volume
sv:Sc/StrandBreak/OnlyIncludeIfInMaterial = 2 "G4_WATER_MODIFIED_1" "G4_WATER_MODIFIED_2"

# physics list in the world
sv:Ph/Default/Modules = 1 "TsEmDNAPhysics"
s:Ph/Default/Electron/SetElasticScatteringModel = "CPA100"

# Source
s:So/Field/Type = "Beam"
s:So/Field/BeamParticle             = "alpha" 
d:So/Field/BeamEnergy               = 4 MeV
u:So/Field/BeamEnergySpread         = 0 
s:So/Field/Component                = "BeamPosition"
s:So/Field/BeamPositionDistribution = "Flat"
s:So/Field/BeamPositionCutoffShape  = "Rectangle"
d:So/Field/BeamPositionCutOffX      = 120 nm
d:So/Field/BeamPositionCutOffY      = 10  nm
s:So/Field/BeamAngularDistribution  = "None"
i:So/Field/NumberOfHistoriesInRun   = 2500

i:Ts/ShowHistoryCountAtInterval     = 5

d:Ge/BeamPosition/TransZ = -1.0 * Ge/World/HLZ nm
d:Ge/BeamPosition/RotX   = 0 deg

#Visualization
#******************************************************
# WARNING!!! 
#******************************************************
# Due to the high number of primaries, this example can 
# frezee a computer if the visualization is used.
#******************************************************
#s:Gr/ViewA/Type="OpenGL"
i:Gr/ViewA/WindowSizeX = 900
i:Gr/ViewA/WindowSizeY = 700
d:Gr/ViewA/Theta = 55 deg
d:Gr/ViewA/Phi = 20 deg
u:Gr/ViewA/Zoom = 2.5

i:Ts/NumberOfThreads = 0
b:Ts/ShowCPUTime = "True"

