# -- Geometry --
# World
d:Ge/World/HLX								= 5.0 um
d:Ge/World/HLY								= 5.0 um
d:Ge/World/HLZ								= 5.0 um
b:Ge/World/Invisible						= "true"
s:Ge/World/Material							= "G4_WATER"

# Spherical nucleus
s:Ge/Nucleus/Type							= "TsSphere"
s:Ge/Nucleus/Parent							= "World"
s:Ge/Nucleus/Material						= "G4_WATER"
s:Ge/Nucleus/Color							= "White"
d:Ge/Nucleus/RMax							= 4.65 um

# Source position
d:Ge/BeamPosition/TransX					= 0.025 um
d:Ge/BeamPosition/TransY					= 0.025 um
d:Ge/BeamPosition/TransZ					= 4.65 um

# -- Material definitions --
s:Ma/G4_HistoneMaterial/CloneFromMaterial   = "G4_WATER"
d:Ma/G4_HistoneMaterial/CloneWithDensity    = 1.407 g/cm3
s:Ma/G4_BaseMaterial/CloneFromMaterial      = "G4_WATER"
d:Ma/G4_BaseMaterial/CloneWithDensity       = 1.0 g/cm3
s:Ma/G4_BackboneMaterial/CloneFromMaterial  = "G4_WATER"
d:Ma/G4_BackboneMaterial/CloneWithDensity   = 1.0 g/cm3
s:Ma/G4_WATER_MODIFIED/CloneFromMaterial    = "G4_WATER"
d:Ma/G4_WATER_MODIFIED/CloneWithDensity     = 1.0 g/cm3

# -- Physics and Chemistry --
sv:Ph/Default/Modules						= 1 "g4em-dna"

# -- Source and runs --
s:So/Demo/Type								= "Beam"
s:So/Demo/Component							= "BeamPosition"
s:So/Demo/BeamParticle						= "proton"
s:So/Demo/BeamPositionDistribution 			= "none"
s:So/Demo/BeamAngularDistribution			= "none"
d:So/Demo/BeamEnergy						= 5.0 MeV
i:So/Demo/NumberOfHistoriesInRun			= 1

# -- Scorer --
includeFile									= DNAScorerStepByStep.txt
s:Sc/DNADamageScorer/Component 				= "Nucleus"
i:Sc/DNADamageScorer/NumberOfHistoriesInRun = So/Demo/NumberOfHistoriesInRun
i:Sc/DNADamageScorer/BasePairPositionAtGeometricHierarchy = 0
sv:Sc/DNADamageScorer/Strand1MaterialNames  = 4 "G4_WATER_MODIFIED" "G4_BackboneMaterial" "G4_BaseMaterial" "G4_HistoneMaterial"
sv:Sc/DNADamageScorer/Strand2MaterialNames  = 3 "G4_WATER_MODIFIED" "G4_BackboneMaterial" "G4_BaseMaterial"
s:Sc/DNADamageScorer/PrimaryParticle		= So/Demo/BeamParticle
d:Sc/DNADamageScorer/MeanEnergy				= So/Demo/BeamEnergy MeV


# -- Visualization --
s:Gr/View/Type								= "OpenGL"
i:Gr/View/WindowSizeX                   	= 800
i:Gr/View/WindowSizeY                   	= 800
d:Gr/View/Theta                         	= 45 deg
d:Gr/View/Phi                           	= 30 deg
s:Gr/View/ColorBy                      		= "ParticleType"
sv:Gr/View/ColorByParticleTypeNames     	= 4 "e-" "alpha" "proton" "neutron"
sv:Gr/View/ColorByParticleTypeColors    	= 4 "green" "red" "blue" "grass"
#s:Gr/View/BackgroundColor               	= "White"

Ts/ShowHistoryCountAtInterval				= 1
i:Ts/Seed									= 280