#
iv:Gr/Color/transparentlightblue = 4 175 255 255 70
iv:Gr/Color/transparentblue = 4 0 0 255 100

s:Ma/G4_WATER_MODIFIED/CloneFromMaterial = "G4_WATER"
d:Ma/G4_WATER_MODIFIED/CloneWithDensity = 1 g/cm3

s:Ge/Plasmids/Parent = "World"
s:Ge/Plasmids/Type   = "TsIRTPlasmidsSupercoiled"
s:Ge/Plasmids/Material = "G4_WATER"
s:Ge/Plasmids/Color = "transparentlightblue"
s:Ge/Plasmids/DrawingStyle = "Solid"
s:Ge/Plasmids/VoxelStraight_logic/Material = "G4_WATER"
b:Ge/Plasmids/VoxelStraight_logic/Invisible = "True"

s:Ge/Plasmids/phosphate1_waterShell/Material     = "G4_WATER_MODIFIED"
s:Ge/Plasmids/phosphate1_waterShell/DrawingStyle = "Solid"
s:Ge/Plasmids/phosphate1_waterShell/Color        = "red"
s:Ge/Plasmids/phosphate1/Material = "G4_WATER_MODIFIED"
s:Ge/Plasmids/phosphate1/DrawingStyle = "Solid"
s:Ge/Plasmids/phosphate1/Color        = "grass"
s:Ge/Plasmids/deoxyribose1_waterShell/Material = "G4_WATER_MODIFIED"
s:Ge/Plasmids/deoxyribose1_waterShell/DrawingStyle = "Solid"
s:Ge/Plasmids/deoxyribose1_waterShell/Color        = "transparentblue"
s:Ge/Plasmids/deoxyribose1/Material = "G4_WATER_MODIFIED"
s:Ge/Plasmids/deoxyribose1/DrawingStyle = "Solid"
s:Ge/Plasmids/deoxyribose1/Color        = "yellow"

s:Ge/Plasmids/phosphate2_waterShell/Material     = "G4_WATER_MODIFIED"
s:Ge/Plasmids/phosphate2_waterShell/DrawingStyle = "Solid"
s:Ge/Plasmids/phosphate2_waterShell/Color        = "red"
s:Ge/Plasmids/phosphate2/Material = "G4_WATER_MODIFIED"
s:Ge/Plasmids/phosphate2/DrawingStyle = "Solid"
s:Ge/Plasmids/phosphate2/Color        = "grass"
s:Ge/Plasmids/deoxyribose2_waterShell/Material = "G4_WATER_MODIFIED"
s:Ge/Plasmids/deoxyribose2_waterShell/DrawingStyle = "Solid"
s:Ge/Plasmids/deoxyribose2_waterShell/Color        = "transparentblue"
s:Ge/Plasmids/deoxyribose2/Material = "G4_WATER_MODIFIED"
s:Ge/Plasmids/deoxyribose2/DrawingStyle = "Solid"
s:Ge/Plasmids/deoxyribose2/Color        = "yellow"

s:Ge/Plasmids/base_adenine_waterShell/Material = "G4_WATER_MODIFIED"
s:Ge/Plasmids/base_adenine_waterShell/DrawingStyle = "Solid"
s:Ge/Plasmids/base_adenine_waterShell/Color        = "transparentblue"
s:Ge/Plasmids/base_adenine/Material           = "G4_WATER_MODIFIED"
s:Ge/Plasmids/base_adenine/DrawingStyle       = "Solid"
s:Ge/Plasmids/base_adenine/Color              = "red" 

s:Ge/Plasmids/base_thymine_waterShell/Material     = "G4_WATER_MODIFIED"
s:Ge/Plasmids/base_thymine_waterShell/DrawingStyle = "Solid"
s:Ge/Plasmids/base_thymine_waterShell/Color        = "transparentblue"
s:Ge/Plasmids/base_thymine/Material     = "G4_WATER_MODIFIED"
s:Ge/Plasmids/base_thymine/DrawingStyle = "Solid"
s:Ge/Plasmids/base_thymine/Color        = "red"

s:Ge/Plasmids/base_guanine_waterShell/Material = "G4_WATER_MODIFIED"
s:Ge/Plasmids/base_guanine_waterShell/DrawingStyle = "Solid"
s:Ge/Plasmids/base_guanine_waterShell/Color  = "transparentblue"
s:Ge/Plasmids/base_guanine/Material = "G4_WATER_MODIFIED"
s:Ge/Plasmids/base_guanine/DrawingStyle = "Solid"
s:Ge/Plasmids/base_guanine/Color  = "red"

s:Ge/Plasmids/base_cytosine_waterShell/Material = "G4_WATER_MODIFIED"
s:Ge/Plasmids/base_cytosine_waterShell/DrawingStyle = "Solid"
s:Ge/Plasmids/base_cytosine_waterShell/Color  = "transparentblue"
s:Ge/Plasmids/base_cytosine/Material = "G4_WATER_MODIFIED"
s:Ge/Plasmids/base_cytosine/DrawingStyle = "Solid"
s:Ge/Plasmids/base_cytosine/Color  = "red"

s:Ge/Plasmids/histone/Material = "G4_WATER_MODIFIED"
s:Ge/Plasmids/histone/DrawingStyle = "Solid"
s:Ge/Plasmids/histone/Color = "magenta"