## 

d:Ch/TOPASChemistry/BackgroundReaction/Hydroxyl/CH3OH/Concentration = theConcentration M #0.1031e-2 M
d:Ch/TOPASChemistry/BackgroundReaction/SolvatedElectron/NO3m/Concentration = 0.25e-3 M #25e-3 M
d:Ch/TOPASChemistry/BackgroundReaction/Hydrogen/NO3m/Concentration = 0.25e-3 M #25e-3 M
s:Sc/nbOfMol/OutputFile = "temporal/Methanol_theConcentration_M_Nitrate_0.25e-3_M" #25e-3_M"

i:Ts/Verbosity = 0 
################# CHEMISTRY
sv:Ph/Default/Modules = 2 "TsEmDNAPhysics" "TsEmDNAChemistry"
s:Ph/Default/Electron/SetElasticScatteringModel = "ELSEPA" 
s:Ph/Default/SolvatedElectronThermalizationModel = "Meesungnoen" #Ritchie"
#s:Ph/Default/SolvatedElectronThermalizationModel = "Ritchie" #Kreipl" #Ritchie"

#includeFile = /Users/ramosj/Projects/RadiolysisValidation/gvalueLET/TOPASDefaultReactionsLaVerne.txt ScavengerReactions.txt
includeFile = TOPASDefaultReactionsLaVerne.txt ScavengerReactions.txt

s:Ch/ChemistryName = "TOPASChemistry"
b:Ch/TOPASChemistry/ChemicalStageTransportActive = "True"
dv:Ch/TOPASChemistry/AddTimeStepHighEdge   = 1 999999 ps
dv:Ch/TOPASChemistry/AddTimeStepResolution = 1 1e-6 ps
d:Ch/TOPASChemistry/ChemicalStageTimeEnd = 1.00001 ps
b:Ch/TOPASChemistry/TestForContactReactions = "True"

sv:Ch/TOPASChemistry/Reaction/Hydroxyl/HydrogenPeroxide/Products = 1 "hydroperoxy"
d:Ch/TOPASChemistry/Reaction/Hydroxyl/HydrogenPeroxide/ReactionRate = 2.7e7 /M/s
i:Ch/TOPASChemistry/Reaction/Hydroxyl/HydrogenPeroxide/ReactionType = 2
b:Ch/TOPASChemistry/Reaction/Hydroxyl/HydrogenPeroxide/CompatibleWithStepByStep = "False"

# Methanol
s:Mo/CH3OH/Symbol = "CH3OH"
d:Mo/CH3OH/DiffusionCoefficient = 0 nm2/s
u:Mo/CH3OH/Charge = 0
d:Mo/CH3OH/Radius = 0.5 nm

s:Mo/CH2OH/Symbol = "CH2OH"
d:Mo/CH2OH/DiffusionCoefficient = 0 nm2/s
u:Mo/CH2OH/Charge = 0
d:Mo/CH2OH/Radius = 0.5 nm

# Nitrate
s:Mo/NO3m/Symbol = "NO3m"
d:Mo/NO3m/DiffusionCoefficient = 0 nm2/s
u:Mo/NO3m/Charge = 0
d:Mo/NO3m/Radius = 0.5 nm

s:Mo/NO32m/Symbol = "NO32m"
d:Mo/NO32m/DiffusionCoefficient = 0 nm2/s
u:Mo/NO32m/Charge = 0
d:Mo/NO32m/Radius = 0.5 nm


s:Mo/HNO3m/Symbol = "HNO32m"
d:Mo/HNO3m/DiffusionCoefficient = 0 nm2/s
u:Mo/HNO3m/Charge = 0
d:Mo/HNO3m/Radius = 0.5 nm

# CH3OH + OH -> CH2OH + H2O
sv:Ch/TOPASChemistry/BackgroundReaction/Hydroxyl/CH3OH/Products = 1 "CH2OH"
d:Ch/TOPASChemistry/BackgroundReaction/Hydroxyl/CH3OH/ReactionRate  = 9.7e8 /M/s 
i:Ch/TOPASChemistry/BackgroundReaction/Hydroxyl/CH3OH/ReactionType = 6
s:Ch/TOPASChemistry/BackgroundReaction/Hydroxyl/CH3OH/ScavengingModel = "ExponentialSingleFactor"
b:Ch/TOPASChemistry/BackgroundReaction/Hydroxyl/CH3OH/CompatibleWithStepByStep = "False"

# NO3-  +  e-aq  ->  NO3^2- 
sv:Ch/TOPASChemistry/BackgroundReaction/SolvatedElectron/NO3m/Products = 1 "NO32m"
d:Ch/TOPASChemistry/BackgroundReaction/SolvatedElectron/NO3m/ReactionRate  = 9.7e9 /M/s 
i:Ch/TOPASChemistry/BackgroundReaction/SolvatedElectron/NO3m/ReactionType = 6
s:Ch/TOPASChemistry/BackgroundReaction/SolvatedElectron/NO3m/ScavengingModel = "ExponentialSingleFactor"
b:Ch/TOPASChemistry/BackgroundReaction/SolvatedElectron/NO3m/CompatibleWithStepByStep = "False"

# NO3-  +  e-aq  ->  NO3^2- 
sv:Ch/TOPASChemistry/BackgroundReaction/Hydrogen/NO3m/Products = 1 "HNO3m"
d:Ch/TOPASChemistry/BackgroundReaction/Hydrogen/NO3m/ReactionRate  = 1.4e6 /M/s 
i:Ch/TOPASChemistry/BackgroundReaction/Hydrogen/NO3m/ReactionType = 6
s:Ch/TOPASChemistry/BackgroundReaction/Hydrogen/NO3m/ScavengingModel = "ExponentialSingleFactor"
b:Ch/TOPASChemistry/BackgroundReaction/Hydrogen/NO3m/CompatibleWithStepByStep = "False"

################# CHEMISTRY

Ge/World/HLX= 1 km 
Ge/World/HLY= 1 km 
Ge/World/HLZ= 1 km 
Ge/World/Material ="G4_WATER"

d:Ge/sWorld/HLX= 1 km 
d:Ge/sWorld/HLY= 1 km 
d:Ge/sWorld/HLZ= 1 km 
s:Ge/sWorld/Material ="G4_WATER"
s:Ge/sWorld/Type = "TsBox"
s:Ge/sWorld/Parent = "World"

Ge/BeamPosition/TransZ = -0.0 * Ge/World/HLZ um
Ge/BeamPosition/RotX = 0 deg

So/Demo/BeamPositionDistribution = "None"
So/Demo/BeamEnergySpread = 0
So/Demo/BeamParticle = "e-"
So/Demo/BeamEnergy = 999.999 keV 

u:perCent = 0.01 

s:Sc/nbOfMol/Quantity = "IRTInTOPAS"
s:Sc/nbOfMol/Component = "sWorld"
s:Sc/nbOfMol/IfOutputFileAlreadyExists = "Overwrite"
s:Sc/nbOfMol/OutputType = "ascii"
d:Sc/nbOfMol/KillPrimaryIfEnergyLossExceeds = So/Demo/BeamEnergy keV * perCent
d:Sc/nbOfMol/AbortEventIfPrimaryEnergyLossExceeds = 1.005 * Sc/nbOfMol/KillPrimaryIfEnergyLossExceeds keV
b:Sc/nbOfMol/KillPrimaryBasedOnEnergyLoss = "true"
d:Sc/nbOfMol/KillPrimaryBasedOnTrackLength = 100 km 
i:Sc/nbOfMol/OutputBufferSize = 1
d:Sc/nbOfMol/CutOffTime = 1 ps
d:Sc/nbOfMol/TimeLower = 1.0 ps
d:Sc/nbOfMol/TimeUpper = 1e9 ps 
i:Sc/nbOfMol/TimeBins  = 100
sv:Sc/nbOfMol/ReportMoleculesNamed = 7 "OH^0" "e_aq^-1" "H^0" "H2O2^0" "CH2OH" "NO32m" "HNO3m"
b:Sc/nbOfMol/UseScaledProbabilityForSpinBehavior = "True"

i:So/Demo/NumberOfHistoriesInRun = 500
i:Ts/ShowHistoryCountAtInterval = 50

i:Ts/MaxInterruptedHistories  = So/Demo/NumberOfHistoriesInRun

Ts/NumberOfThreads = 12
b:Ts/ShowCPUTime = "True"

