## 
#1.1e10 /M/s
u:ReactionRateFactor = theReactionRate
d:ReactionRateKobs = 1.1e10 /M/s
d:ReactionRateKobsH = 9e7 /M/s

d:Ch/TOPASChemistry/BackgroundReaction/SolvatedElectron/HydrogenPeroxide/Concentration = theConcentration M
d:Ch/TOPASChemistry/BackgroundReaction/SolvatedElectron/HydrogenPeroxide/ReactionRate  = ReactionRateKobs  /M/s  * ReactionRateFactor
d:Ch/TOPASChemistry/Reaction/SolvatedElectron/HydrogenPeroxide/ReactionRate  = ReactionRateKobs /M/s * ReactionRateFactor

d:Ch/TOPASChemistry/BackgroundReaction/Hydrogen/HydrogenPeroxide/Concentration = theConcentration M
d:Ch/TOPASChemistry/BackgroundReaction/Hydrogen/HydrogenPeroxide/ReactionRate  = ReactionRateKobsH  /M/s  * ReactionRateFactor
d:Ch/TOPASChemistry/Reaction/Hydrogen/HydrogenPeroxide/ReactionRate  = ReactionRateKobsH /M/s * ReactionRateFactor

s:Sc/nbOfMol/OutputFile = "temporal/H2O2_theConcentration_M_KBr_1e-3_M_Factor_theReactionRate"

i:Ts/Verbosity = 0 
################# CHEMISTRY
sv:Ph/Default/Modules = 2 "TsEmDNAPhysics" "TsEmDNAChemistry"
s:Ph/Default/Electron/SetElasticScatteringModel = "ELSEPA" 
#s:Ph/Default/SolvatedElectronThermalizationModel = "Meesungnoen" #Ritchie"
#s:Ph/Default/SolvatedElectronThermalizationModel = "Kreipl" #Ritchie"
s:Ph/Default/SolvatedElectronThermalizationModel = "Ritchie"


includeFile = TOPASDefaultReactionsLaVerne.txt ../MolecularHydrogen/ScavengerReactions.txt

s:Ch/ChemistryName = "TOPASChemistry"
b:Ch/TOPASChemistry/ChemicalStageTransportActive = "True"
dv:Ch/TOPASChemistry/AddTimeStepHighEdge   = 1 999999 ps
dv:Ch/TOPASChemistry/AddTimeStepResolution = 1 1e-6 ps
d:Ch/TOPASChemistry/ChemicalStageTimeEnd = 1.00001 ps
b:Ch/TOPASChemistry/TestForContactReactions = "True"

################# CHEMISTRY

Ge/World/HLX= 1 km 
Ge/World/HLY= 1 km 
Ge/World/HLZ= 1 km 
Ge/World/Material ="G4_WATER"

d:Ge/sWorld/HLX= 1 km 
d:Ge/sWorld/HLY= 1 km 
d:Ge/sWorld/HLZ= 1 km 
s:Ge/sWorld/Material ="G4_WATER"
s:Ge/sWorld/Type = "TsBox"
s:Ge/sWorld/Parent = "World"

Ge/BeamPosition/TransZ = -0.0 * Ge/World/HLZ um
Ge/BeamPosition/RotX = 0 deg

So/Demo/BeamPositionDistribution = "None"
So/Demo/BeamEnergySpread = 0
So/Demo/BeamParticle = "e-"
So/Demo/BeamEnergy = 999.999 keV 

u:perCent = 0.01 

s:Sc/nbOfMol/Quantity = "IRTInTopas"
s:Sc/nbOfMol/Component = "sWorld"
s:Sc/nbOfMol/IfOutputFileAlreadyExists = "Overwrite"
s:Sc/nbOfMol/OutputType = "ascii"
d:Sc/nbOfMol/KillPrimaryIfEnergyLossExceeds = So/Demo/BeamEnergy keV * perCent
d:Sc/nbOfMol/AbortEventIfPrimaryEnergyLossExceeds = 1.01 * Sc/nbOfMol/KillPrimaryIfEnergyLossExceeds keV
b:Sc/nbOfMol/KillPrimaryBasedOnEnergyLoss = "true"
d:Sc/nbOfMol/KillPrimaryBasedOnTrackLength = 100 km 
i:Sc/nbOfMol/OutputBufferSize = 1
d:Sc/nbOfMol/CutOffTime = 1 ps
d:Sc/nbOfMol/TimeLower = 1.0 ps
d:Sc/nbOfMol/TimeUpper = 1e9 ps 
i:Sc/nbOfMol/TimeBins  = 100
sv:Sc/nbOfMol/ReportMoleculesNamed = 5 "OH^0" "e_aq^-1" "H^0" "H2O2^0" "H_2^0" 
b:Sc/nbOfMol/UseScaledProbabilityForSpinBehavior = "True"

i:So/Demo/NumberOfHistoriesInRun = 5000
i:Ts/ShowHistoryCountAtInterval = 500

i:Ts/MaxInterruptedHistories  = So/Demo/NumberOfHistoriesInRun

Ts/NumberOfThreads = 0
b:Ts/ShowCPUTime = "True"

