## 
#Ts/Geant4VersionString = "geant4-10-07-ref-01"
s:Sc/nbOfMol/OutputFile = "gvalue-pure-water-temp" #whole100pcEtrack" #G4dev" #-Meesugnoen" 
#s:Sc/nbOfMol/OutputFile = "Geant4-Dev" #Reference"
#b:Ts/PauseBeforeInit = "True"
i:Ts/Verbosity = 0
################# CHEMISTRY
sv:Ph/Default/Modules = 2 "TsEmDNAPhysics" "TsEmDNAChemistry"
#sv:Ph/Default/Modules = 2 "g4em-dna_opt2" "TsEmDNAChemistry"
#sv:Ph/Default/Modules = 2 "g4em-dna_opt1" "g4em-dna-chemistry" #TsEmDNAChemistry"
#s:Ph/Default/Electron/SetIonisationModel = "Emfietzoglou"
#s:Ph/Default/Electron/SetExcitationModel = "Emfietzoglou"
#s:Ph/Default/Electron/SetElasticScatteringModel = "CPA100" #ELSEPA" #CPA100"
s:Ph/Default/Electron/SetElasticScatteringModel = "ELSEPA" #CPA100"
#s:Ph/Default/SolvatedElectronThermalizationModel = "Kreipl" 
s:Ph/Default/SolvatedElectronThermalizationModel =  "Ritchie" 
#s:Ph/Default/SolvatedElectronThermalizationModel = "Meesungnoen" #"Kreipl" #meesungnoensolid"


s:Ch/ChemistryName = "TOPASChemistry"
b:Ch/TOPASChemistry/ChemicalStageTransportActive = "True"
dv:Ch/TOPASChemistry/AddTimeStepHighEdge   = 1 999999 ps
dv:Ch/TOPASChemistry/AddTimeStepResolution = 1 1e-6 ps
d:Ch/TOPASChemistry/ChemicalStageTimeEnd = 1.00001 ps
b:Ch/TOPASChemistry/TestForContactReactions = "True"
#b:Sc/nbOfMol/UseScaledProbabilityForSpinBehavior = "True"

#includeFile = TOPASDefaultReactions.txt #
includeFile = TOPASDefaultReactionsLaVerne.txt #TOPASDefaultReactionsLaVerne.txt 
#Ch/TOPASChemistry/Reaction/SolvatedElectron/SolvatedElectron/ReactionRate = 1.45e10 /M/s 
#Ch/TOPASChemistry/Reaction/Hydrogen/Hydrogen/ReactionRate = 1.028e10 /M/s 
#includeFile = TOPASDefaultReactions.txt 
#Ch/TOPASChemistry/Reaction/SolvatedElectron/SolvatedElectron/ReactionRate = 1.1e10 /M/s
#Ch/TOPASChemistry/Reaction/Hydrogen/Hydrogen/ReactionRate = 1.56e10 /M/s

################# CHEMISTRY

Ge/World/HLX= 0.5 cm #1 km 
Ge/World/HLY= 0.5 cm #1 km 
Ge/World/HLZ= 0.5 cm #1 km 
Ge/World/Material ="G4_WATER"

d:Ge/sWorld/HLX= Ge/World/HLX um 
d:Ge/sWorld/HLY= Ge/World/HLY um
d:Ge/sWorld/HLZ= Ge/World/HLY um
s:Ge/sWorld/Material ="G4_WATER"
s:Ge/sWorld/Type = "TsBox"
s:Ge/sWorld/Parent = "World"

Ge/BeamPosition/TransZ = -0.0 * Ge/World/HLZ um
Ge/BeamPosition/RotX = 0 deg

So/Demo/BeamPositionDistribution = "None"
So/Demo/BeamEnergySpread = 0
So/Demo/BeamParticle = "e-"
So/Demo/BeamEnergy = 999.999 keV 

u:perCent = 0.01 #1.0 #01 

s:Sc/nbOfMol/Quantity = "IRTInTOPAS" #"IRT"
s:Sc/nbOfMol/Component = "sWorld"
s:Sc/nbOfMol/IfOutputFileAlreadyExists = "Overwrite"
s:Sc/nbOfMol/OutputType = "ascii"
d:Sc/nbOfMol/KillPrimaryIfEnergyLossExceeds = So/Demo/BeamEnergy keV * perCent
d:Sc/nbOfMol/AbortEventIfPrimaryEnergyLossExceeds = 1.005 * Sc/nbOfMol/KillPrimaryIfEnergyLossExceeds keV
b:Sc/nbOfMol/KillPrimaryBasedOnEnergyLoss = "true"
d:Sc/nbOfMol/KillPrimaryBasedOnTrackLength = 100 km 
i:Sc/nbOfMol/OutputBufferSize = 1
d:Sc/nbOfMol/CutOffTime = 1 ps
d:Sc/nbOfMol/TimeLower = 1.0 ps
d:Sc/nbOfMol/TimeUpper = 1e6 ps 
i:Sc/nbOfMol/TimeBins  = 200
sv:Sc/nbOfMol/ReportMoleculesNamed = 6 "OH^0" "e_aq^-1" "H3O^1" "H^0" "H2O2^0" "H_2^0"
b:Sc/nbOfMol/UseScaledProbabilityForSpinBehavior = "True"
b:Sc/nbOfMol/ReportDeltaGValues = "True"

i:So/Demo/NumberOfHistoriesInRun = 500 #0
i:Ts/ShowHistoryCountAtInterval = 50 #0

i:Ts/MaxInterruptedHistories  = So/Demo/NumberOfHistoriesInRun

Ts/NumberOfThreads = 24
b:Ts/ShowCPUTime = "True"

