## 
i:Ts/Verbosity = 0 
sv:Ph/Default/Modules = 2 "TsEmDNAPhysics" "TsEmDNAChemistry"
s:Ph/Default/Electron/SetElasticScatteringModel = "ELSEPA" 
s:Ph/Default/SolvatedElectronThermalizationModel = "Ritchie"

includeFile = TOPASDefaultReactionsLaVerne.txt 

s:Ch/ChemistryName = "TOPASChemistry"
b:Ch/TOPASChemistry/ChemicalStageTransportActive = "True"
dv:Ch/TOPASChemistry/AddTimeStepHighEdge   = 1 999999 ps
dv:Ch/TOPASChemistry/AddTimeStepResolution = 1 1e-6 ps
d:Ch/TOPASChemistry/ChemicalStageTimeEnd = 1.00001 ps
b:Ch/TOPASChemistry/TestForContactReactions = "True"

Ge/World/HLX= 1 km 
Ge/World/HLY= 1 km 
Ge/World/HLZ= 1 km 
Ge/World/Material ="G4_WATER"

d:Ge/sWorld/HLX= 1 km 
d:Ge/sWorld/HLY= 1 km 
d:Ge/sWorld/HLZ= 1 km 
s:Ge/sWorld/Material ="G4_WATER"
s:Ge/sWorld/Type = "TsBox"
s:Ge/sWorld/Parent = "World"

Ge/BeamPosition/TransZ = -0.0 * Ge/World/HLZ um
Ge/BeamPosition/RotX = 0 deg

So/Demo/BeamPositionDistribution = "None"
So/Demo/BeamEnergySpread = 0
So/Demo/BeamParticle = "e-"
So/Demo/BeamEnergy = 999.999 keV 

u:perCent = 0.01 

s:Sc/nbOfMol/Quantity = "IRT"
s:Sc/nbOfMol/Component = "sWorld"
s:Sc/nbOfMol/OutputFile = "electron_Gvalue_IRT_2"
s:Sc/nbOfMol/IfOutputFileAlreadyExists = "Overwrite"
s:Sc/nbOfMol/OutputType = "ascii"
d:Sc/nbOfMol/KillPrimaryIfEnergyLossExceeds = So/Demo/BeamEnergy keV * perCent
d:Sc/nbOfMol/AbortEventIfPrimaryEnergyLossExceeds = 1.01 * Sc/nbOfMol/KillPrimaryIfEnergyLossExceeds keV
b:Sc/nbOfMol/KillPrimaryBasedOnEnergyLoss = "true"
d:Sc/nbOfMol/KillPrimaryBasedOnTrackLength = 100 km 
i:Sc/nbOfMol/OutputBufferSize = 1
d:Sc/nbOfMol/CutOffTime = 1 ps
d:Sc/nbOfMol/TimeLower = 1.0 ps
d:Sc/nbOfMol/TimeUpper = 1 us #999999 ps #1e6 ps 
i:Sc/nbOfMol/TimeBins  = 500

i:So/Demo/NumberOfHistoriesInRun = 1000
i:Ts/ShowHistoryCountAtInterval = 100

i:Ts/MaxInterruptedHistories  = So/Demo/NumberOfHistoriesInRun

Ts/NumberOfThreads = 6
i:Ts/Seed = 2
b:Ts/ShowCPUTime = "True"

